PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/counterbalance/130000.csv', 'resources/counterbalance/130001.csv', 'resources/counterbalance/130002.csv', 'resources/counterbalance/130003.csv', 'resources/counterbalance/130004.csv', 'resources/counterbalance/130005.csv', 'resources/counterbalance/130006.csv', 'resources/counterbalance/130007.csv', 'resources/counterbalance/130008.csv', 'resources/counterbalance/130009.csv', 'resources/counterbalance/130010.csv', 'resources/counterbalance/130011.csv', 'resources/counterbalance/130012.csv', 'resources/counterbalance/130013.csv', 'resources/counterbalance/130014.csv', 'resources/counterbalance/130015.csv', 'resources/counterbalance/130016.csv', 'resources/counterbalance/130017.csv', 'resources/counterbalance/130018.csv', 'resources/counterbalance/130019.csv', 'resources/counterbalance/130020.csv', 'resources/counterbalance/130021.csv', 'resources/counterbalance/130022.csv', 'resources/counterbalance/130023.csv', 'resources/counterbalance/130024.csv', 'resources/counterbalance/130025.csv', 'resources/counterbalance/130026.csv', 'resources/counterbalance/130027.csv', 'resources/counterbalance/130028.csv', 'resources/counterbalance/130029.csv', 'resources/counterbalance/130030.csv', 'resources/counterbalance/130031.csv', 'resources/passageList_1.xlsx', 'resources/passageList_2.xlsx']
  Screen = 1
  Units = cm
  Window size (pixels) = [1536, 960]
  color = $[0.6549,0.6549,0.6549]
  expName = read-aloud-o_s1_r2_e1
  logging level = debug
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Routines
  Routine calibration
    TextComponent calibText
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      wrapWidth = 20
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      text:
        Audio calibrating…

        Please remain silent for 5 seconds.
    TextComponent calibTimer
      color = black
      letterHeight = 0.5
      pos = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every frame] = $round(5 - t)
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  Routine breakLoop
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        counterbalance.finished=True
  Routine instructCalibration
    TextComponent explainCalib
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Before we begin, a short period of silence is needed to calibrate the task audio.

        The calibration period will last 5 seconds. During the calibration, please do not speak, but it is OK for there to be background noise.

        Audio calibration will begin when you press the space key.
    TextComponent instructContinue4
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        - — -

        Press the space key to begin calibration.
    KeyboardComponent key_resp_02
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruct
    TextComponent text_3
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        The audio calibration is complete.

        When a passage comes on-screen, begin reading aloud immediately. Do not “pre-read” the passage. Just dive in!

        Remember to read clearly, at your normal volume and reading speed. When you finish reading a passage, press the space key to continue.
    TextComponent instructContinue5
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        - — -

        Press the space key to proceed to the first passage.
    KeyboardComponent key_resp_03
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introLDT
    TextComponent welcomeLDT
      color = black
      letterHeight = 0.8
      pos = (0, -2)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        In this task, you will be presented with a word.

        You must decide if this is a real word or not. You will press the letter "J" if the word on screen is a real word. You will press the letter "F" if the word on screen is NOT a real word.

        Try to answer as quickly but as accurately as possible.

        Press either "F" or "J" to continue.
    TextComponent headerLDT
      color = black
      letterHeight = 2
      pos = (0, 8)
      startVal [time (s)] = 0.0
      text = Welcome to the word decision game!
      wrapWidth = 20
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    KeyboardComponent key_resp_07
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ldtWelcomeResponseF
      color = black
      letterHeight = 0.65
      pos = (-9, -9)
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        F

        not a word
    TextComponent ldtWelcomeResponseJ
      color = black
      letterHeight = 0.65
      pos = (9, -9)
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        J

        is a word
  Routine ldtPractice
    TextComponent ldtPracticeWord
      color = black
      letterHeight = 1.5
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $ldtPractice
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    KeyboardComponent practiceResponse
      allowedKeys = 'f','j'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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    TextComponent ldtPracticeResponseF
      color = black
      letterHeight = 0.65
      pos = (-9, -9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 25
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      text:
        F

        not a word
    TextComponent ldtPracticeResponseJ
      color = black
      letterHeight = 0.65
      pos = (9, -9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 25
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      text:
        J

        is a word
  Routine moreInstruct
    TextComponent finalRemind
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Great job on the practice round!

        On the next screen, you will begin the real game. It is just like the practice, but we won’t tell you if each answer is right or not.

        This game does not have any breaks, but it will only last about 12 minutes.

        Remember to rest your fingers back on the “F” and “J” keys after each response.

        The word decision game will start when you press the space key.
    KeyboardComponent key_resp_09
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructContinue7
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        - — -

        Press the space key to start the game.
  Routine ldtTask
    TextComponent ldtStimulus
      color = black
      letterHeight = 1.5
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $ldtStim
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    KeyboardComponent ldtResponse
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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    TextComponent ldtResponseF
      color = black
      letterHeight = 0.65
      pos = (-9, -9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 25
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      text:
        F

        not a word
    TextComponent ldtResponseJ
      color = black
      letterHeight = 0.65
      pos = (9, -9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 25
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      text:
        J

        is a word
  Routine feedback
    CodeComponent stgMessage
      Code Type = Auto->JS
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      Begin Routine:
        if not practiceResponse.keys :
            msg="Sorry, too slow."
        elif practiceResponse.corr:
            msg="Correct!"
        else:
            msg="Oops! That was wrong."
    TextComponent feedbackMessage
      color = black
      letterHeight = 0.8
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      wrapWidth = 20
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  Routine interTrial
    TextComponent blank_interTrial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fixPractice
    TextComponent fixPracticecross
      color = black
      letterHeight = 2
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
      text = +
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  Routine readComplete
    TextComponent readCompleteintroLDT
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        You have completed the reading task!

        Next, you will play the word decision game.
    KeyboardComponent key_resp_06
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructContinue6
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        - — -

        Press the space key to continue.
  Routine ldtComplete
    TextComponent ldtCompleteintroDCCS
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        You have completed the word decision game!

        Finally, you will play the matching game.
    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructContinue8
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        - — -

        Press the space key to continue.
  Routine introPractice
    TextComponent introPracticeText
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        First, we will do a short practice session.

        Place your left index finger on the “F” key.

        Place your right index finger on the “J” key.

        Press either "F" or "J" to continue.
    KeyboardComponent key_resp_08
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ldtIntroResponseF
      color = black
      letterHeight = 0.65
      pos = (-9, -9)
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        F

        not a word
    TextComponent ldtIntroResponseJ
      color = black
      letterHeight = 0.65
      pos = (9, -9)
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        J

        is a word
  Routine introPractice2
    TextComponent introPracticeText2
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        When the letter string appears, you need to make a decision as fast as possible whether the string is a word in English or not.

        For example: "pretty/preft".

        If you think the string forms a word, press the "J" button on the keyboard.

        If you think the string is not a word, press the "F" button on the keyboard.

        For this practice session, we will tell you if you got the right answer.

        Remember to rest your fingers back on the “F” and “J” keys after each response.

        Press either "F" or "J" to start the practice session.
    KeyboardComponent key_resp_24
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ldtIntroResponseF2
      color = black
      letterHeight = 0.65
      pos = (-9, -9)
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        F

        not a word
    TextComponent ldtIntroResponseJ2
      color = black
      letterHeight = 0.65
      pos = (9, -9)
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        J

        is a word
  Routine fixLdtTask
    TextComponent fixLdtTaskCross
      color = black
      letterHeight = 2
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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  Routine welcome
    TextComponent headerWelcome
      color = black
      letterHeight = 2
      pos = (0, 8)
      startVal [time (s)] = 0.0
      text = Hello!
      wrapWidth = 20
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    TextComponent welcomeText
      color = black
      letterHeight = 0.8
      pos = (0, -2)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        You will complete three activities today.

        The first is a reading task.
        This task takes about 40 minutes.

        The second is a word decision game.
        This game takes about 15 minutes.

        The third is a color and shape matching game.
        This game takes about xx minutes.

        After you complete all tasks, you need to return (briefly!) to the questionnaires.
    TextComponent instructContinue3
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        - — -

        Press the space key to continue.
    KeyboardComponent key_resp_00
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        participant_id = expInfo['participant']
        passageCount = 0
  Routine introReading
    TextComponent welcomeReading
      color = black
      letterHeight = 0.8
      pos = (0, -2)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        In this task, you will be presented with a series of text passages that you should read aloud.

        Please try to read clearly, at a normal volume, as if you were reading a story to another person.

        There are a total of 20 passages to read. Each passage should take about 1-2 minutes. After each passage, you will be asked a question based on the text.

        You may take a short break (less than a minute) between each passage if you like, or you can continue to the next passage right away.
    KeyboardComponent key_resp_01
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent headerReading
      color = black
      letterHeight = 2
      pos = (0, 8)
      startVal [time (s)] = 0.0
      text = Welcome to the reading task!
      wrapWidth = 20
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    TextComponent instructContinue2
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        - — -

        Press the space key to continue.
  Routine passage1
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        passageCount += 1
    TextComponent passageText1
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.2
      text [set every repeat] = $firstList
      wrapWidth = 25
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    TextComponent instructContinue1
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.2
      wrapWidth = 20
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      text:
        - — -

        Press the space key to continue.
    KeyboardComponent key_resp_04
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine challenge1
    TextComponent challengeText1
      color = black
      letterHeight = 0.8
      pos = (0, 2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $firstchallengeQuestion
      wrapWidth = 20
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    KeyboardComponent challengeResponse1
      allowedKeys = 'a','b','c','d'
      correctAns = $firstcorrectAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent challengeOptions1
      color = black
      letterHeight = 0.8
      pos = (0, -2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $firstletterA + str(firstchoiceA) + '\n' + firstletterB + str(firstchoiceB) + '\n' + firstletterC + str(firstchoiceC) + '\n' + firstletterD + str(firstchoiceD)
      wrapWidth = 20
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    TextComponent answerInstruct1
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        - — -

        Select your answer by pressing the corresponding letter on the keyboard.
    TextComponent counterText1
      color = black
      letterHeight = 0.5
      pos = (7, 7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(passageCount) + ' of 20'
      wrapWidth = 20
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  Routine passage2
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        passageCount += 1
    TextComponent passageText2
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.2
      text [set every repeat] = $secondList
      wrapWidth = 25
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    TextComponent instructContinue2_2
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.2
      wrapWidth = 20
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      text:
        - — -

        Press the space key to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine challenge2
    TextComponent challengeText2
      color = black
      letterHeight = 0.8
      pos = (0, 2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $secondchallengeQuestion
      wrapWidth = 20
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    KeyboardComponent challengeResponse2
      allowedKeys = 'a','b','c','d'
      correctAns = $secondcorrectAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent challengeOptions2
      color = black
      letterHeight = 0.8
      pos = (0, -2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $secondletterA + str(secondchoiceA) + '\n' + secondletterB + str(secondchoiceB) + '\n' + secondletterC + str(secondchoiceC) + '\n' + secondletterD + str(secondchoiceD)
      wrapWidth = 20
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    TextComponent answerInstruct2
      color = black
      letterHeight = 0.55
      pos = (0, -10)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        - — -

        Select your answer by pressing the corresponding letter on the keyboard.
    TextComponent counterText2
      color = black
      letterHeight = 0.5
      pos = (7, 7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(passageCount) + ' of 20'
      wrapWidth = 20
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  Routine readyScreen1
    TextComponent readingBreak1
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      wrapWidth = 20
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      text:
        If you need a break, please take a short break now (less than a minute).

        You can skip this break and proceed to the next passage by pressing the space key.
    KeyboardComponent key_resp_05
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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    TextComponent timer1
      color = black
      letterHeight = 0.5
      pos = (7, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text [set every frame] = $round(60 - t)
      wrapWidth = 20
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  Routine readyScreen2
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if passageCount == 4:
            continueRoutine = False
    TextComponent readingBreak2
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      wrapWidth = 20
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      text:
        If you need a break, please take a short break now (less than a minute).

        You can skip this break and proceed to the next passage by pressing the space key.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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    TextComponent timer2
      color = black
      letterHeight = .5
      pos = (7, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text [set every frame] = $round(60 - t)
      wrapWidth = 20
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  Routine shapeRabbitEx
    TextComponent textRabbit
      color = black
      letterHeight = 0.8
      pos = (0, 7)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        If it’s a RABBIT,
        choose the RABBIT picture by pressing “F”.
    ImageComponent image_7
      image = resources/dccs/BlueRabbit.png
      pos = (0, 1)
      size = (5, 5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_8
      image = resources/dccs/BlueBoatWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_9
      image = resources/dccs/RedRabbitWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    ImageComponent image_10
      image = resources/dccs/RedRabbitRed.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_11
      image = resources/dccs/RedRabbitWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_12
      image = resources/dccs/RedRabbitRed.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 4.0
      texture resolution = 512
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    KeyboardComponent key_resp_11
      allowedKeys = 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      letterHeight = 0.8
      pos = (0, -8)
      startVal [time (s)] = 0.0
      text = Press “F” to continue.
      wrapWidth = 20
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  Routine shapeBoatEx
    TextComponent textBoat
      color = black
      letterHeight = .8
      pos = (0, 7)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        We’ll play the SHAPE game first.

        In the SHAPE game, choose the picture that’s the same SHAPE as the picture in the middle of the screen.

        If it’s a BOAT, choose the BOAT picture by pressing “J”.
    ImageComponent image_1
      image = resources/dccs/RedBoat.png
      pos = (0, 1)
      size = (5, 5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_2
      image = resources/dccs/RedRabbitWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_3
      image = resources/dccs/BlueBoatWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    ImageComponent image_4
      image = resources/dccs/BlueBoatRed.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_5
      image = resources/dccs/BlueBoatWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_6
      image = resources/dccs/BlueBoatRed.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 4.0
      texture resolution = 512
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    KeyboardComponent key_resp_10
      allowedKeys = 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = black
      letterHeight = .8
      pos = (0, -8)
      startVal [time (s)] = 0.0
      text = Press “J” to continue.
      wrapWidth = 20
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  Routine cueShape
    TextComponent textCueShape
      color = black
      letterHeight = 1.5
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = SHAPE
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    ImageComponent leftImageCue
      image = resources/dccs/RedRabbitWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent rightImageCue
      image = resources/dccs/BlueBoatWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine stimShape
    ImageComponent stimImageShape
      image [set every repeat] = $middle
      pos = (0, 1)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
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    ImageComponent leftImageShape
      image [set every repeat] = $left
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
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    ImageComponent rightImageShape
      image [set every repeat] = $right
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
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    KeyboardComponent key_resp_13
      allowedKeys = 'f','j'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      storeCorrect = True
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  Routine feedbackShape
    CodeComponent codeFeedbackShape
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_13.keys: # if a keypress has been made
            if key_resp_13.keys[0] =='f':
                if key_resp_13.corr:
                    left = 'resources/dccs/RedRabbitRed.png'
                    right = 'resources/dccs/BlueBoatWhite.png'
                    msg = 'That is correct!'
        #            audio = 'resources/dccs/audio_thatsRight.mp3'
                else:
                    left = 'resources/dccs/RedRabbitWhite.png'
                    right = 'resources/dccs/BlueBoatRed.png'
                    msg = 'This is the same shape, so you should choose this box.'
        #            audio = 'resources/dccs/audio_error_shape_ft-dccs.mp3'

            elif key_resp_13.keys[0] =='j':
                if key_resp_13.corr:
                    right = 'resources/dccs/BlueBoatRed.png'
                    left = 'resources/dccs/RedRabbitWhite.png'
                    msg = 'That is correct!'
        #            audio = 'resources/dccs/audio_thatsRight.mp3'
                else:
                    left = 'resources/dccs/RedRabbitRed.png'
                    right = 'resources/dccs/BlueBoatWhite.png'
                    msg = 'This is the same shape, so you should choose this box.'
        #            audio = 'resources/dccs/audio_error_shape_ft-dccs.mp3'
        else: # this is classed as an incorrect response
            if corrAns == 'j':
                right = 'resources/dccs/BlueBoatRed.png'
                left = 'resources/dccs/RedRabbitWhite.png'
                msg = 'This is the same shape, so you should choose this box.'
        #        audio = 'resources/dccs/audio_error_shape_ft-dccs.mp3'
            else:
                left = 'resources/dccs/RedRabbitRed.png'
                right = 'resources/dccs/BlueBoatWhite.png'
                msg = 'This is the same shape, so you should choose this box.'
        #        audio = 'resources/dccs/audio_error_shape_ft-dccs.mp3'
    ImageComponent leftImageFeedback
      image [set every repeat] = $left
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      texture resolution = 512
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    ImageComponent middleImageFeedback
      image [set every repeat] = $middle
      pos = (0, 1)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      texture resolution = 512
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    ImageComponent rightImageFeedback
      image [set every repeat] = $right
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      texture resolution = 512
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    SoundComponent sound_1
      disabled = True
      sound = resources/dccs/audio_thatsRight.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent textFeedbackShape
      color = black
      letterHeight = 0.8
      pos = (0, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg
      wrapWidth = 20
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  Routine clearShape
    CodeComponent codeClearShape
      Code Type = Auto->JS
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      Begin Experiment:
        counterOne = 0
        counterTwo = 0
      Begin Routine:
        if key_resp_13.keys:
            if key_resp_13.corr:
                counterOne +=1
            else:
                counterTwo +=1
        else:
            key_resp_13.corr = 0
            counterTwo +=1
  Routine interTrialShape
    ImageComponent leftImageWait
      image = resources/dccs/RedRabbitWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      texture resolution = 512
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    ImageComponent rightImageWait
      image = resources/dccs/BlueBoatWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      texture resolution = 512
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  Routine ISICodeShape
    CodeComponent pickISI
      Code Type = Both
      End JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials_4.addData("ISI", thisISI);
      End Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1000, 1500, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # show in console for debugging
        print('thisISI: ', thisISI)

        # save this ISI to our output file
        trials_4.addData('ISI', thisISI)
  Routine fixationShape
    ImageComponent star_2
      image = resources/dccs/star.png
      pos = (0, 1)
      size = (0.83, 0.89)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    ImageComponent leftImageFixation
      image = resources/dccs/RedRabbitWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    ImageComponent rightImageFixation
      image = resources/dccs/BlueBoatWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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  Routine continueShape
    CodeComponent codeContinueStatus
      Code Type = Auto->JS
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      Begin Experiment:
        isForward = 0
      Begin Routine:
        if counterOne >= 3:
            outPut = 'Lets move forward. Press the space key to continue.'
            block.finished = True
        if counterTwo > 1:
            outPut = 'Please try the practice again. Press the space key.'
            isForward += 1
            block.finished = False
            counterOne = 0
            counterTwo = 0
            if isForward == 3:
                outPut = 'Thank you for your participation!'
                block.finished = True
    TextComponent textContinueStatus
      color = black
      letterHeight = 0.8
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 20
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeJS
      Code Type = JS
      End JS Routine:
        if ((isForward === 3)) {
            psychoJS.quit();
        }
  Routine instructShape
    TextComponent text_12
      color = black
      letterHeight = 0.8
      pos = (0, 6)
      startVal [time (s)] = 0.0
      text = Now you try.
      wrapWidth = 20
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    TextComponent text_13
      color = black
      letterHeight = 0.8
      pos = (0, 4)
      startVal [time (s)] = 0.0
      text = Keep your eyes on the star.
      wrapWidth = 20
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    ImageComponent star_1
      image = resources/dccs/star.png
      pos = (0, 1)
      size = (0.83, 0.89)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text_14
      color = black
      letterHeight = 0.8
      pos = (0, -2)
      startVal [time (s)] = 0.0
      text = Answer as fast as you can without making mistakes.
      wrapWidth = 20
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    TextComponent text_15
      color = black
      letterHeight = 0.8
      pos = (0, -4)
      startVal [time (s)] = 0.0
      text = If you make a mistake, just keep going!
      wrapWidth = 20
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    TextComponent text_16
      color = black
      letterHeight = 0.8
      pos = (0, -8)
      startVal [time (s)] = 0.0
      text = Press either “F” or “J” to continue.
      wrapWidth = 20
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    KeyboardComponent key_resp_12
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine colorRedEx
    TextComponent textRed
      color = black
      letterHeight = .8
      pos = (0, 7)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        We can also match by COLOR.

        In the COLOR game, chose the picture that’s the same COLOR as the picture in the middle of the screen.

        If it’s RED, choose the RED picture by pressing “J”.
    ImageComponent image_13
      image = resources/dccs/RedBoat.png
      pos = (0, 1)
      size = (5, 5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_14
      image = resources/dccs/BlueBoatWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_15
      image = resources/dccs/RedRabbitWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    ImageComponent image_16
      image = resources/dccs/RedRabbitRed.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_17
      image = resources/dccs/RedRabbitWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_18
      image = resources/dccs/RedRabbitRed.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 4.0
      texture resolution = 512
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    KeyboardComponent key_resp_15
      allowedKeys = 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = black
      letterHeight = .8
      pos = (0, -8)
      startVal [time (s)] = 0.0
      text = Press “J” to continue.
      wrapWidth = 20
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  Routine colorBlueEx
    TextComponent textBlue
      color = black
      letterHeight = 0.8
      pos = (0, 7)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        If it’s BLUE,
        choose the BLUE picture by pressing “F”.
    ImageComponent image_19
      image = resources/dccs/BlueRabbit.png
      pos = (0, 1)
      size = (5, 5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_20
      image = resources/dccs/RedRabbitWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent image_21
      image = resources/dccs/BlueBoatWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      texture resolution = 512
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    ImageComponent image_22
      image = resources/dccs/BlueBoatRed.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_23
      image = resources/dccs/BlueBoatWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent image_24
      image = resources/dccs/BlueBoatRed.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 4.0
      texture resolution = 512
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    KeyboardComponent key_resp_16
      allowedKeys = 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = black
      letterHeight = 0.8
      pos = (0, -8)
      startVal [time (s)] = 0.0
      text = Press “F” to continue.
      wrapWidth = 20
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  Routine instructColor
    TextComponent text_20
      color = black
      letterHeight = 0.8
      pos = (0, 6)
      startVal [time (s)] = 0.0
      text = Now you try.
      wrapWidth = 20
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    TextComponent text_21
      color = black
      letterHeight = 0.8
      pos = (0, 4)
      startVal [time (s)] = 0.0
      text = Keep your eyes on the star.
      wrapWidth = 20
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    ImageComponent star_3
      image = resources/dccs/star.png
      pos = (0, 1)
      size = (0.83, 0.89)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text_22
      color = black
      letterHeight = 0.8
      pos = (0, -2)
      startVal [time (s)] = 0.0
      text = Answer as fast as you can without making mistakes.
      wrapWidth = 20
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    TextComponent text_23
      color = black
      letterHeight = 0.8
      pos = (0, -4)
      startVal [time (s)] = 0.0
      text = If you make a mistake, just keep going!
      wrapWidth = 20
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    TextComponent text_24
      color = black
      letterHeight = 0.8
      pos = (0, -8)
      startVal [time (s)] = 0.0
      text = Press either “F” or “J” to continue.
      wrapWidth = 20
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    KeyboardComponent key_resp_17
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine interTrialColor
    ImageComponent leftImageWait2
      image = resources/dccs/RedRabbitWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      texture resolution = 512
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    ImageComponent rightImageWait2
      image = resources/dccs/BlueBoatWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      texture resolution = 512
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  Routine ISICodeColor
    CodeComponent pickISI2
      Code Type = Both
      End JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials_4.addData("ISI", thisISI);
      End Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1000, 1500, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # show in console for debugging
        print('thisISI: ', thisISI)

        # save this ISI to our output file
        trials_4.addData('ISI', thisISI)
  Routine fixationColor
    ImageComponent star_4
      image = resources/dccs/star.png
      pos = (0, 1)
      size = (0.83, 0.89)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    ImageComponent leftImageFixation2
      image = resources/dccs/RedRabbitWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    ImageComponent rightImageFixation2
      image = resources/dccs/BlueBoatWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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  Routine cueColor
    TextComponent textCueColor
      color = black
      letterHeight = 1.5
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = COLOR
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    ImageComponent leftImageCue2
      image = resources/dccs/RedRabbitWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent rightImageCue2
      image = resources/dccs/BlueBoatWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine stimColor
    ImageComponent stimImageColor
      image [set every repeat] = $middle
      pos = (0, 1)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
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    ImageComponent leftImageColor
      image [set every repeat] = $left
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
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    ImageComponent rightImageColor
      image [set every repeat] = $right
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
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    KeyboardComponent key_resp_18
      allowedKeys = 'f','j'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      storeCorrect = True
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  Routine feedbackColor
    CodeComponent codeFeedbackColor
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_18.keys:
            if key_resp_18.keys[0] =='f':
                if key_resp_18.corr:
                    left = 'resources/dccs/RedRabbitRed.png'
                    right = 'resources/dccs/BlueBoatWhite.png'
                    msg = 'That is correct!'
        #            audio2 = 'resources/dccs/audio_thatsRight.mp3'
                else:
                    left = 'resources/dccs/RedRabbitWhite.png'
                    right = 'resources/dccs/BlueBoatRed.png'
                    msg = 'This is the same color, so you should choose this box.'
        #            audio2 = 'resources/dccs/audio_error_color_ft-dccs.mp3'
            elif key_resp_18.keys[0] =='j':
                if key_resp_18.corr:
                    right = 'resources/dccs/BlueBoatRed.png'
                    left = 'resources/dccs/RedRabbitWhite.png'
                    msg = 'That is correct!'
        #            audio2 = 'resources/dccs/audio_thatsRight.mp3'
                else:
                    left = 'resources/dccs/RedRabbitRed.png'
                    right = 'resources/dccs/BlueBoatWhite.png'
                    msg = 'This is the same color, so you should choose this box.'
        #            audio2 = 'resources/dccs/audio_error_color_ft-dccs.mp3'
        else:
            if corrAns == 'j':
                    right = 'resources/dccs/BlueBoatRed.png'
                    left = 'resources/dccs/RedRabbitWhite.png'
                    msg =  'This is the same color, so you should choose this box.'
        #            audio2 = 'resources/dccs/audio_error_color_ft-dccs.mp3'
            else:
                    left = 'resources/dccs/RedRabbitRed.png'
                    right = 'resources/dccs/BlueBoatWhite.png'
                    msg =  'This is the same color, so you should choose this box.'
        #            audio2 = 'resources/dccs/audio_error_color_ft-dccs.mp3'
    ImageComponent leftImageFeedback2
      image [set every repeat] = $left
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      texture resolution = 512
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    ImageComponent middleImageFeedback2
      image [set every repeat] = $middle
      pos = (0, 1)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      texture resolution = 512
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    ImageComponent rightImageFeedback2
      image [set every repeat] = $right
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      texture resolution = 512
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    SoundComponent sound_2
      disabled = True
      sound = resources/dccs/audio_thatsRight.mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent textFeedbackColor
      color = black
      letterHeight = 0.8
      pos = (0, 7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $msg
      wrapWidth = 20
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  Routine clearColor
    CodeComponent codeClearShape_2
      Code Type = Auto->JS
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      Begin Experiment:
        counterOne = 0
        counterTwo = 0
      Begin Routine:
        if key_resp_18.keys:
            if key_resp_18.corr:
                counterOne +=1
            else:
                counterTwo +=1
        else:
            key_resp_18.corr = 0
            counterTwo +=1
  Routine continueColor
    CodeComponent codeContinueStatus2
      Code Type = Auto->JS
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      Begin Experiment:
        isForward = 0
      Begin Routine:
        if counterOne >= 3:
            outPut = 'Lets move forward. Press the space key to continue.'
            block_2.finished = True
        if counterTwo > 1:
            outPut = 'Please try the practice again. Press the space key.'
            isForward += 1
            block_2.finished = False
            counterOne = 0
            counterTwo = 0
            if isForward == 3:
                outPut = 'Thank you for your participation!'
                block_2.finished = True
    TextComponent textContinueStatus2
      color = black
      letterHeight = 0.8
      pos = (0, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $outPut
      wrapWidth = 20
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    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codeJS2
      Code Type = JS
      End JS Routine:
        if ((isForward === 3)) {
            psychoJS.quit();
        }
  Routine instructCombo
    TextComponent text_25
      color = black
      letterHeight = 0.8
      pos = (0, 6)
      startVal [time (s)] = 0.0
      text = Let’s play the game.
      wrapWidth = 20
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    TextComponent text_26
      color = black
      letterHeight = 0.8
      pos = (0, 4)
      startVal [time (s)] = 0.0
      text = Keep your eyes on the star.
      wrapWidth = 20
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    ImageComponent star_5
      image = resources/dccs/star.png
      pos = (0, 1)
      size = (0.83, 0.89)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text_27
      color = black
      letterHeight = 0.8
      pos = (0, -2)
      startVal [time (s)] = 0.0
      text = Answer as fast as you can without making mistakes.
      wrapWidth = 20
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    TextComponent text_28
      color = black
      letterHeight = 0.8
      pos = (0, -4)
      startVal [time (s)] = 0.0
      text = If you make a mistake, just keep going!
      wrapWidth = 20
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    TextComponent text_29
      color = black
      letterHeight = 0.8
      pos = (0, -8)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Remember to rest your fingers back on the letter “F” and the letter “J” after each answer.

        Press the space key to start the game.
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introDCCSPractice
    TextComponent headerDCCS
      color = black
      letterHeight = 2
      pos = (0, 8)
      startVal [time (s)] = 0.0
      text = Welcome to the matching game!
      wrapWidth = 20
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    TextComponent welcomeDCCS
      color = black
      letterHeight = 1
      pos = (0, -2)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        We’re going to play a matching game with COLORS and SHAPES.

        Just like the last game, you will use the “F” and “J” keys to respond.

        Turn your sound on to hear feedback during the practice rounds.

        Press either "F" or "J" to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introDCCS
    TextComponent textIntroDCCS
      color = black
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Now we’re going to play both games together.

        Remember, if you see the word SHAPE, choose the picture that is the same SHAPE as the picture in the middle of the screen. If you see the word COLOR, choose the picture that is the same COLOR as the picture in the middle of the screen.

        Rest your fingers back on the letter “F” and the letter “J” after you answer.

        Press the space key to continue.
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine countReset
    CodeComponent resetLoopCounters
      Code Type = Auto->JS
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      Begin Routine:
        colorLoopCounter = 0
        shapeLoopCounter = 0
  Routine countReset_2
  Routine interTrialCombo
    ImageComponent image_25
      image = resources/dccs/BlueBallWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      texture resolution = 512
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    ImageComponent image_26
      image = resources/dccs/YellowTruckWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      texture resolution = 512
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  Routine ISICodeCombo
    CodeComponent pickISI3
      Code Type = Both
      End JS Routine:
        ISIRange = linspace(1000, 1500, 500);
        shuffle(ISIRange);
        thisISI = (ISIRange[0] / 1000);
        console.log("thisISI: ", thisISI);
        trials.addData("ISI", thisISI);
      End Routine:
        # pick the ISI for the next routine
        # this code component is set to 'both' because we need to remove the 'np'
        # at the start of np.linspace (this is a python library JS won't know what to call.

        # make range from a to b in n stepsizes
        ISIRange = np.linspace(1000, 1500, 500)

        # picking from a shuffled array is easier for random selection in JS
        shuffle(ISIRange)
        thisISI = ISIRange[0]/1000 # the first item of the shuffled array

        # show in console for debugging
        print('thisISI: ', thisISI)

        # save this ISI to our output file
        colorLoop.addData('ISI', thisISI)
  Routine fixationCombo
    ImageComponent star_6
      image = resources/dccs/star.png
      pos = (0, 1)
      size = (0.83, 0.89)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    ImageComponent leftImageFixation3
      image = resources/dccs/BlueBallWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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    ImageComponent rightImageFixation3
      image = resources/dccs/YellowTruckWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $thisISI
      texture resolution = 512
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  Routine cueCombo
    TextComponent textCueCombo
      color = black
      letterHeight = 1.5
      pos = (0, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cue
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    ImageComponent leftImageCue3
      image = resources/dccs/BlueBallWhite.png
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    ImageComponent rightImageCue3
      image = resources/dccs/YellowTruckWhite.png
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine stimCombo
    ImageComponent stimImageCombo
      image [set every repeat] = $middle
      pos = (0, 1)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
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    ImageComponent leftImageCombo
      image [set every repeat] = $left
      pos = (-8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
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    ImageComponent rightImageCombo
      image [set every repeat] = $right
      pos = (8, -5)
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      texture resolution = 512
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    KeyboardComponent key_resp_22
      allowedKeys = 'f','j'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      storeCorrect = True
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  Routine stopColorLoop
    CodeComponent stopColorCode
      Code Type = Auto->JS
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      End Routine:
        if colorLoopCounter==numFreq:
            colorLoop.finished=True
        colorLoopCounter +=1
  Routine stopShapeLoop
    CodeComponent stopShapeCode
      Code Type = Auto->JS
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      End Routine:
        if shapeLoopCounter==0:
            shapeLoop.finished=True
        shapeLoopCounter +=1
  Routine goodbye
    TextComponent headerGoodbye
      color = black
      letterHeight = 2
      pos = (0, 6)
      startVal [time (s)] = 0.0
      text = Almost done! Just a few questions, please!
      wrapWidth = 20
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    TextComponent messageGoodbye
      color = black
      letterHeight = 1
      pos = (0, -2)
      startVal [time (s)] = 0.0
      wrapWidth = 20
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      text:
        Thank you for playing these games!

        The study is ALMOST complete. We just have a few more questions for you over on REDCap. Please return to that tab of your browser and answer the final questions to complete the study.

        Press the space key to exit this window.
    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine introReading
  Routine instructCalibration
  Routine calibration
  Routine instruct
  LoopInitiator counterbalance loopType="TrialHandler"
    conditionsFile = $'resources/counterbalance/choose_' + participant_id[-1] + '.csv' 
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $whichList
      loopType = random
      nReps = 1
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      Routine passage1
      Routine challenge1
      Routine readyScreen1
      Routine passage2
      Routine challenge2
      Routine readyScreen2
    LoopTerminator trials
  LoopTerminator counterbalance
  Routine readComplete
  Routine introLDT
  Routine introPractice
  Routine introPractice2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = resources/ldt_practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ldtPractice', 'desplay'), ('correctAnswer', 'f')]),
      OrderedDict([('ldtPractice', 'episode'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtPractice', 'path'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtPractice', 'plaz'), ('correctAnswer', 'f')]),
      OrderedDict([('ldtPractice', 'clality'), ('correctAnswer', 'f')]),
      OrderedDict([('ldtPractice', 'board'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtPractice', 'crank'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtPractice', 'haer'), ('correctAnswer', 'f')]),
      OrderedDict([('ldtPractice', 'bodidy'), ('correctAnswer', 'f')])]
    Routine fixPractice
    Routine ldtPractice
    Routine feedback
  LoopTerminator trials_2
  Routine moreInstruct
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = resources/ldt_wordList.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ldtStim', 'accident'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'act'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'aerial'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'affection'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'aisle'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'apology'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'berry'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'blame'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'boot'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'bother'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'brother'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'burner'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'business'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'butter'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'cancer'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'cash'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'cause'), ('wordType', 'word'), ('correctAnswer', 'j')]),
      OrderedDict([('ldtStim', 'champion'), ('wordType', 'word'), ('correctAnswer', 'j')])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
    Routine fixLdtTask
    Routine ldtTask
    Routine interTrial
  LoopTerminator trials_3
  Routine ldtComplete
  Routine introDCCSPractice
  Routine shapeBoatEx
  Routine shapeRabbitEx
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine instructShape
    LoopInitiator trials_4 loopType="TrialHandler"
      conditionsFile = resources/ShapePractTrial.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('left', 'resources/assets/RedRabbitWhite.png'), ('right', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/RedBoat.png'), ('corrAns', 'j')]),
        OrderedDict([('left', 'resources/assets/RedRabbitWhite.png'), ('right', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/BlueBoat.png'), ('corrAns', 'j')]),
        OrderedDict([('left', 'resources/assets/RedRabbitWhite.png'), ('right', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/RedRabbit.png'), ('corrAns', 'f')]),
        OrderedDict([('left', 'resources/assets/RedRabbitWhite.png'), ('right', 'resources/assets/BlueBoatWhite.png'), ('middle', 'resources/assets/BlueRabbit.png'), ('corrAns', 'f')])]
      Routine interTrialShape
      Routine ISICodeShape
      Routine fixationShape
      Routine cueShape
      Routine stimShape
      Routine feedbackShape
      Routine clearShape
    LoopTerminator trials_4
    Routine continueShape
  LoopTerminator block
  Routine colorRedEx
  Routine colorBlueEx
  LoopInitiator block_2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine instructColor
    LoopInitiator trials_5 loopType="TrialHandler"
      conditionsFile = resources/colorPract.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('left', 'resources/dccs/RedRabbitWhite.png'), ('right', 'resources/dccs/BlueBoatWhite.png'), ('middle', 'resources/dccs/RedBoat.png'), ('corrAns', 'f')]),
        OrderedDict([('left', 'resources/dccs/RedRabbitWhite.png'), ('right', 'resources/dccs/BlueBoatWhite.png'), ('middle', 'resources/dccs/BlueBoat.png'), ('corrAns', 'j')]),
        OrderedDict([('left', 'resources/dccs/RedRabbitWhite.png'), ('right', 'resources/dccs/BlueBoatWhite.png'), ('middle', 'resources/dccs/RedRabbit.png'), ('corrAns', 'f')]),
        OrderedDict([('left', 'resources/dccs/RedRabbitWhite.png'), ('right', 'resources/dccs/BlueBoatWhite.png'), ('middle', 'resources/dccs/BlueRabbit.png'), ('corrAns', 'j')])]
      Routine interTrialColor
      Routine ISICodeColor
      Routine fixationColor
      Routine cueColor
      Routine stimColor
      Routine feedbackColor
      Routine clearColor
    LoopTerminator trials_5
    Routine continueColor
  LoopTerminator block_2
  Routine introDCCS
  Routine instructCombo
  LoopInitiator LoopSelectFreqNumber loopType="TrialHandler"
    conditionsFile = resources/selectFreqNum.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('numFreq', 1)]),
      OrderedDict([('numFreq', 2)]),
      OrderedDict([('numFreq', 3)]),
      OrderedDict([('numFreq', 4)])]
    Routine countReset
    LoopInitiator colorLoop loopType="TrialHandler"
      conditionsFile = resources/color.csv
      loopType = fullRandom
      nReps = 1
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      conditions:
        [OrderedDict([('left', 'resources/dccs/BlueBallWhite.png'), ('right', 'resources/dccs/YellowTruckWhite.png'), ('middle', 'resources/dccs/BlueBall.png'), ('cue', 'COLOR'), ('corrAns', 'f')]),
        OrderedDict([('left', 'resources/dccs/BlueBallWhite.png'), ('right', 'resources/dccs/YellowTruckWhite.png'), ('middle', 'resources/dccs/YellowBall.png'), ('cue', 'COLOR'), ('corrAns', 'j')]),
        OrderedDict([('left', 'resources/dccs/BlueBallWhite.png'), ('right', 'resources/dccs/YellowTruckWhite.png'), ('middle', 'resources/dccs/BlueTruck.png'), ('cue', 'COLOR'), ('corrAns', 'f')]),
        OrderedDict([('left', 'resources/dccs/BlueBallWhite.png'), ('right', 'resources/dccs/YellowTruckWhite.png'), ('middle', 'resources/dccs/YellowTruck.png'), ('cue', 'COLOR'), ('corrAns', 'j')]),
        OrderedDict([('left', 'resources/dccs/BlueBallWhite.png'), ('right', 'resources/dccs/YellowTruckWhite.png'), ('middle', 'resources/dccs/BlueBall.png'), ('cue', 'COLOR'), ('corrAns', 'f')]),
        OrderedDict([('left', 'resources/dccs/BlueBallWhite.png'), ('right', 'resources/dccs/YellowTruckWhite.png'), ('middle', 'resources/dccs/YellowBall.png'), ('cue', 'COLOR'), ('corrAns', 'j')]),
        OrderedDict([('left', 'resources/dccs/BlueBallWhite.png'), ('right', 'resources/dccs/YellowTruckWhite.png'), ('middle', 'resources/dccs/BlueTruck.png'), ('cue', 'COLOR'), ('corrAns', 'f')])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
      Routine interTrialCombo
      Routine ISICodeCombo
      Routine fixationCombo
      Routine cueCombo
      Routine stimCombo
      Routine stopColorLoop
    LoopTerminator colorLoop
    LoopInitiator shapeLoop loopType="TrialHandler"
      conditionsFile = resources/shape.csv
      loopType = fullRandom
      nReps = 1
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      conditions:
        [OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueBall.png'), ('cue', 'SHAPE'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/YellowBall.png'), ('cue', 'SHAPE'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueTruck.png'), ('cue', 'SHAPE'), ('corrAns', 'm')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/YellowTruck.png'), ('cue', 'SHAPE'), ('corrAns', 'm')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueBall.png'), ('cue', 'SHAPE'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/YellowBall.png'), ('cue', 'SHAPE'), ('corrAns', 'z')]),
        OrderedDict([('left', 'resources/assets/BlueBallWhite.png'), ('right', 'resources/assets/YellowTruckWhite.png'), ('middleStim', 'resources/assets/BlueTruck.png'), ('cue', 'SHAPE'), ('corrAns', 'm')])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
      Routine interTrialCombo
      Routine ISICodeCombo
      Routine fixationCombo
      Routine cueCombo
      Routine stimCombo
      Routine stopShapeLoop
    LoopTerminator shapeLoop
  LoopTerminator LoopSelectFreqNumber
  Routine goodbye
